PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = tutorial5
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test_words
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Click to Submit
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/anuji/OneDrive/Desktop/study words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'vase'},
      {'study_word': 'tiger'},
      {'study_word': 'book'},
      {'study_word': 'cushion'},
      {'study_word': 'piano'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = C:/Users/anuji/OneDrive/Desktop/test words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test_words': 'v_ _e'},
      {'test_words': 't_g_r'},
      {'test_words': '_oo_'},
      {'test_words': 'c_sh__n'},
      {'test_words': 'p_a_o'},
      {'test_words': '_ea_o_'},
      {'test_words': 'c_m_r_'},
      {'test_words': '_p__ad_'},
      {'test_words': '_o_s_'},
      {'test_words': 'o_an_e'}]
    Routine test
  LoopTerminator trials_2
